WorkflowBuilder(Version=2.7.1)
Bonsai.Vision.FileCapture(FileName=5_2023-01-27T18_53_50.avi, PlaybackRate=5242880, StartPosition=0, PositionUnits=Frames, Loop=false, Playing=true)
-> Bonsai.Vision.Grayscale => #1
-> SelectMany "Top Left"
    WorkflowInput Source1 => #0
    Source2=#0 -> GroupWorkflow index1 => #1
        WorkflowInput Source1
        -> Bonsai.Vision.Crop(RegionOfInterest(X=153, Y=228, Width=30, Height=70)) => #1
        -> Bonsai.Vision.Threshold(ThresholdValue=75, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=375, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #5
        #1 -> Bonsai.Vision.Threshold(ThresholdValue=0, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #9
        #5, #9 -> Catch => #10
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #12
        #10 -> MemberSelector(Selector=Area) => #13
        #12, #1 -> Bonsai.Vision.Crop(RegionOfInterest(X=6, Y=10, Width=21, Height=52)) => #14
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #16
        #14 -> MemberSelector(Selector=Height) => #17
        #14 -> MemberSelector(Selector=Width) => #18
        #18, #17, #16, #13 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            item4 as area

            )
        -> WorkflowOutput
    #0 -> GroupWorkflow index2 => #2
        WorkflowInput Source1
        -> Bonsai.Vision.Crop(RegionOfInterest(X=209, Y=222, Width=30, Height=70)) => #1
        -> Bonsai.Vision.Threshold(ThresholdValue=75, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=375, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #5
        #1 -> Bonsai.Vision.Threshold(ThresholdValue=0, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #9
        #5, #9 -> Catch => #10
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #12
        #10 -> MemberSelector(Selector=Area) => #13
        #12, #1 -> Bonsai.Vision.Crop(RegionOfInterest(X=7, Y=9, Width=18, Height=53)) => #14
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #16
        #14 -> MemberSelector(Selector=Height) => #17
        #14 -> MemberSelector(Selector=Width) => #18
        #18, #17, #16, #13 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            item4 as area

            )
        -> WorkflowOutput
    #0 -> GroupWorkflow index3 => #3
        WorkflowInput Source1
        -> Bonsai.Vision.Crop(RegionOfInterest(X=269, Y=210, Width=30, Height=70)) => #1
        -> Bonsai.Vision.Threshold(ThresholdValue=75, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=375, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #5
        #1 -> Bonsai.Vision.Threshold(ThresholdValue=0, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #9
        #5, #9 -> Catch => #10
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #12
        #10 -> MemberSelector(Selector=Area) => #13
        #12, #1 -> Bonsai.Vision.Crop(RegionOfInterest(X=6, Y=12, Width=21, Height=48)) => #14
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #16
        #14 -> MemberSelector(Selector=Height) => #17
        #14 -> MemberSelector(Selector=Width) => #18
        #18, #17, #16, #13 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            item4 as area

            )
        -> WorkflowOutput
    #0 -> GroupWorkflow index4 => #4
        WorkflowInput Source1
        -> Bonsai.Vision.Crop(RegionOfInterest(X=149, Y=303, Width=30, Height=70)) => #1
        -> Bonsai.Vision.Threshold(ThresholdValue=75, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=375, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #5
        #1 -> Bonsai.Vision.Threshold(ThresholdValue=0, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #9
        #5, #9 -> Catch => #10
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #12
        #10 -> MemberSelector(Selector=Area) => #13
        #12, #1 -> Bonsai.Vision.Crop(RegionOfInterest(X=7, Y=9, Width=20, Height=50)) => #14
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #16
        #14 -> MemberSelector(Selector=Height) => #17
        #14 -> MemberSelector(Selector=Width) => #18
        #18, #17, #16, #13 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            item4 as area

            )
        -> WorkflowOutput
    #0 -> GroupWorkflow index5 => #5
        WorkflowInput Source1
        -> Bonsai.Vision.Crop(RegionOfInterest(X=216, Y=304, Width=30, Height=70)) => #1
        -> Bonsai.Vision.Threshold(ThresholdValue=75, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=375, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #5
        #1 -> Bonsai.Vision.Threshold(ThresholdValue=0, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #9
        #5, #9 -> Catch => #10
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #12
        #10 -> MemberSelector(Selector=Area) => #13
        #12, #1 -> Bonsai.Vision.Crop(RegionOfInterest(X=5, Y=12, Width=24, Height=48)) => #14
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #16
        #14 -> MemberSelector(Selector=Height) => #17
        #14 -> MemberSelector(Selector=Width) => #18
        #18, #17, #16, #13 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            item4 as area

            )
        -> WorkflowOutput
    #0 -> GroupWorkflow index6 => #6
        WorkflowInput Source1
        -> Bonsai.Vision.Crop(RegionOfInterest(X=278, Y=295, Width=30, Height=70)) => #1
        -> Bonsai.Vision.Threshold(ThresholdValue=75, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=375, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #5
        #1 -> Bonsai.Vision.Threshold(ThresholdValue=0, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #9
        #5, #9 -> Catch => #10
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #12
        #10 -> MemberSelector(Selector=Area) => #13
        #12, #1 -> Bonsai.Vision.Crop(RegionOfInterest(X=5, Y=9, Width=19, Height=52)) => #14
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #16
        #14 -> MemberSelector(Selector=Height) => #17
        #14 -> MemberSelector(Selector=Width) => #18
        #18, #17, #16, #13 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            item4 as area

            )
        -> WorkflowOutput
    #1, #2, #3, #4, #5, #6 -> Zip
    -> WorkflowOutput
-> Bonsai.IO.CsvWriter(FileName=top_left-5_2023-01-27_run-.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)
#1 -> SelectMany "Top Right"
    WorkflowInput Source1 => #0
    Source2=#0 -> GroupWorkflow index1 => #1
        WorkflowInput Source1
        -> Bonsai.Vision.Crop(RegionOfInterest(X=492, Y=169, Width=30, Height=70)) => #1
        -> Bonsai.Vision.Threshold(ThresholdValue=75, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=375, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #5
        #1 -> Bonsai.Vision.Threshold(ThresholdValue=0, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #9
        #5, #9 -> Catch => #10
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #12
        #10 -> MemberSelector(Selector=Area) => #13
        #12, #1 -> Bonsai.Vision.Crop(RegionOfInterest(X=7, Y=7, Width=18, Height=55)) => #14
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #16
        #14 -> MemberSelector(Selector=Height) => #17
        #14 -> MemberSelector(Selector=Width) => #18
        #18, #17, #16, #13 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            item4 as area

            )
        -> WorkflowOutput
    #0 -> GroupWorkflow index2 => #2
        WorkflowInput Source1
        -> Bonsai.Vision.Crop(RegionOfInterest(X=553, Y=187, Width=30, Height=70)) => #1
        -> Bonsai.Vision.Threshold(ThresholdValue=75, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=375, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #5
        #1 -> Bonsai.Vision.Threshold(ThresholdValue=0, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #9
        #5, #9 -> Catch => #10
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #12
        #10 -> MemberSelector(Selector=Area) => #13
        #12, #1 -> Bonsai.Vision.Crop(RegionOfInterest(X=7, Y=8, Width=18, Height=54)) => #14
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #16
        #14 -> MemberSelector(Selector=Height) => #17
        #14 -> MemberSelector(Selector=Width) => #18
        #18, #17, #16, #13 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            item4 as area

            )
        -> WorkflowOutput
    #0 -> GroupWorkflow index3 => #3
        WorkflowInput Source1
        -> Bonsai.Vision.Crop(RegionOfInterest(X=616, Y=168, Width=30, Height=70)) => #1
        -> Bonsai.Vision.Threshold(ThresholdValue=75, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=375, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #5
        #1 -> Bonsai.Vision.Threshold(ThresholdValue=0, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #9
        #5, #9 -> Catch => #10
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #12
        #10 -> MemberSelector(Selector=Area) => #13
        #12, #1 -> Bonsai.Vision.Crop(RegionOfInterest(X=4, Y=6, Width=23, Height=52)) => #14
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #16
        #14 -> MemberSelector(Selector=Height) => #17
        #14 -> MemberSelector(Selector=Width) => #18
        #18, #17, #16, #13 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            item4 as area

            )
        -> WorkflowOutput
    #0 -> GroupWorkflow index4 => #4
        WorkflowInput Source1
        -> Bonsai.Vision.Crop(RegionOfInterest(X=482, Y=268, Width=30, Height=70)) => #1
        -> Bonsai.Vision.Threshold(ThresholdValue=75, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=375, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #5
        #1 -> Bonsai.Vision.Threshold(ThresholdValue=0, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #9
        #5, #9 -> Catch => #10
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #12
        #10 -> MemberSelector(Selector=Area) => #13
        #12, #1 -> Bonsai.Vision.Crop(RegionOfInterest(X=6, Y=9, Width=20, Height=51)) => #14
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #16
        #14 -> MemberSelector(Selector=Height) => #17
        #14 -> MemberSelector(Selector=Width) => #18
        #18, #17, #16, #13 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            item4 as area

            )
        -> WorkflowOutput
    #0 -> GroupWorkflow index5 => #5
        WorkflowInput Source1
        -> Bonsai.Vision.Crop(RegionOfInterest(X=550, Y=285, Width=30, Height=70)) => #1
        -> Bonsai.Vision.Threshold(ThresholdValue=75, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=375, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #5
        #1 -> Bonsai.Vision.Threshold(ThresholdValue=0, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #9
        #5, #9 -> Catch => #10
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #12
        #10 -> MemberSelector(Selector=Area) => #13
        #12, #1 -> Bonsai.Vision.Crop(RegionOfInterest(X=5, Y=5, Width=18, Height=55)) => #14
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #16
        #14 -> MemberSelector(Selector=Height) => #17
        #14 -> MemberSelector(Selector=Width) => #18
        #18, #17, #16, #13 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            item4 as area

            )
        -> WorkflowOutput
    #0 -> GroupWorkflow index6 => #6
        WorkflowInput Source1
        -> Bonsai.Vision.Crop(RegionOfInterest(X=606, Y=279, Width=30, Height=70)) => #1
        -> Bonsai.Vision.Threshold(ThresholdValue=75, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=375, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #5
        #1 -> Bonsai.Vision.Threshold(ThresholdValue=0, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #9
        #5, #9 -> Catch => #10
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #12
        #10 -> MemberSelector(Selector=Area) => #13
        #12, #1 -> Bonsai.Vision.Crop(RegionOfInterest(X=4, Y=7, Width=19, Height=53)) => #14
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #16
        #14 -> MemberSelector(Selector=Height) => #17
        #14 -> MemberSelector(Selector=Width) => #18
        #18, #17, #16, #13 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            item4 as area

            )
        -> WorkflowOutput
    #1, #2, #3, #4, #5, #6 -> Zip
    -> WorkflowOutput
-> Bonsai.IO.CsvWriter(FileName=top_right-5_2023-01-27_run-.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)
#1 -> SelectMany "Bottom Left"
    WorkflowInput Source1 => #0
    Source2=#0 -> GroupWorkflow index1 => #1
        WorkflowInput Source1
        -> Bonsai.Vision.Crop(RegionOfInterest(X=168, Y=565, Width=30, Height=70)) => #1
        -> Bonsai.Vision.Threshold(ThresholdValue=75, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=375, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #5
        #1 -> Bonsai.Vision.Threshold(ThresholdValue=0, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #9
        #5, #9 -> Catch => #10
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #12
        #10 -> MemberSelector(Selector=Area) => #13
        #12, #1 -> Bonsai.Vision.Crop(RegionOfInterest(X=5, Y=13, Width=19, Height=48)) => #14
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #16
        #14 -> MemberSelector(Selector=Height) => #17
        #14 -> MemberSelector(Selector=Width) => #18
        #18, #17, #16, #13 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            item4 as area

            )
        -> WorkflowOutput
    #0 -> GroupWorkflow index2 => #2
        WorkflowInput Source1
        -> Bonsai.Vision.Crop(RegionOfInterest(X=226, Y=552, Width=30, Height=70)) => #1
        -> Bonsai.Vision.Threshold(ThresholdValue=75, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=375, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #5
        #1 -> Bonsai.Vision.Threshold(ThresholdValue=0, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #9
        #5, #9 -> Catch => #10
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #12
        #10 -> MemberSelector(Selector=Area) => #13
        #12, #1 -> Bonsai.Vision.Crop(RegionOfInterest(X=8, Y=11, Width=17, Height=47)) => #14
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #16
        #14 -> MemberSelector(Selector=Height) => #17
        #14 -> MemberSelector(Selector=Width) => #18
        #18, #17, #16, #13 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            item4 as area

            )
        -> WorkflowOutput
    #0 -> GroupWorkflow index3 => #3
        WorkflowInput Source1
        -> Bonsai.Vision.Crop(RegionOfInterest(X=270, Y=522, Width=30, Height=70)) => #1
        -> Bonsai.Vision.Threshold(ThresholdValue=75, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=375, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #5
        #1 -> Bonsai.Vision.Threshold(ThresholdValue=0, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #9
        #5, #9 -> Catch => #10
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #12
        #10 -> MemberSelector(Selector=Area) => #13
        #12, #1 -> Bonsai.Vision.Crop(RegionOfInterest(X=4, Y=10, Width=22, Height=49)) => #14
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #16
        #14 -> MemberSelector(Selector=Height) => #17
        #14 -> MemberSelector(Selector=Width) => #18
        #18, #17, #16, #13 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            item4 as area

            )
        -> WorkflowOutput
    #0 -> GroupWorkflow index4 => #4
        WorkflowInput Source1
        -> Bonsai.Vision.Crop(RegionOfInterest(X=194, Y=656, Width=30, Height=70)) => #1
        -> Bonsai.Vision.Threshold(ThresholdValue=75, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=375, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #5
        #1 -> Bonsai.Vision.Threshold(ThresholdValue=0, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #9
        #5, #9 -> Catch => #10
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #12
        #10 -> MemberSelector(Selector=Area) => #13
        #12, #1 -> Bonsai.Vision.Crop(RegionOfInterest(X=5, Y=8, Width=22, Height=52)) => #14
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #16
        #14 -> MemberSelector(Selector=Height) => #17
        #14 -> MemberSelector(Selector=Width) => #18
        #18, #17, #16, #13 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            item4 as area

            )
        -> WorkflowOutput
    #0 -> GroupWorkflow index5 => #5
        WorkflowInput Source1
        -> Bonsai.Vision.Crop(RegionOfInterest(X=240, Y=662, Width=30, Height=70)) => #1
        -> Bonsai.Vision.Threshold(ThresholdValue=75, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=375, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #5
        #1 -> Bonsai.Vision.Threshold(ThresholdValue=0, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #9
        #5, #9 -> Catch => #10
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #12
        #10 -> MemberSelector(Selector=Area) => #13
        #12, #1 -> Bonsai.Vision.Crop(RegionOfInterest(X=4, Y=9, Width=23, Height=50)) => #14
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #16
        #14 -> MemberSelector(Selector=Height) => #17
        #14 -> MemberSelector(Selector=Width) => #18
        #18, #17, #16, #13 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            item4 as area

            )
        -> WorkflowOutput
    #0 -> GroupWorkflow index6 => #6
        WorkflowInput Source1
        -> Bonsai.Vision.Crop(RegionOfInterest(X=279, Y=654, Width=30, Height=70)) => #1
        -> Bonsai.Vision.Threshold(ThresholdValue=75, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=375, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #5
        #1 -> Bonsai.Vision.Threshold(ThresholdValue=0, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #9
        #5, #9 -> Catch => #10
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #12
        #10 -> MemberSelector(Selector=Area) => #13
        #12, #1 -> Bonsai.Vision.Crop(RegionOfInterest(X=3, Y=7, Width=24, Height=50)) => #14
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #16
        #14 -> MemberSelector(Selector=Height) => #17
        #14 -> MemberSelector(Selector=Width) => #18
        #18, #17, #16, #13 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            item4 as area

            )
        -> WorkflowOutput
    #1, #2, #3, #4, #5, #6 -> Zip
    -> WorkflowOutput
-> Bonsai.IO.CsvWriter(FileName=bottom_left-5_2023-01-27_run-.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)
#1 -> SelectMany "Bottom Right"
    WorkflowInput Source1 => #0
    Source2=#0 -> GroupWorkflow index1 => #1
        WorkflowInput Source1
        -> Bonsai.Vision.Crop(RegionOfInterest(X=512, Y=536, Width=30, Height=70)) => #1
        -> Bonsai.Vision.Threshold(ThresholdValue=75, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=375, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #5
        #1 -> Bonsai.Vision.Threshold(ThresholdValue=0, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #9
        #5, #9 -> Catch => #10
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #12
        #10 -> MemberSelector(Selector=Area) => #13
        #12, #1 -> Bonsai.Vision.Crop(RegionOfInterest(X=6, Y=10, Width=19, Height=50)) => #14
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #16
        #14 -> MemberSelector(Selector=Height) => #17
        #14 -> MemberSelector(Selector=Width) => #18
        #18, #17, #16, #13 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            item4 as area

            )
        -> WorkflowOutput
    #0 -> GroupWorkflow index2 => #2
        WorkflowInput Source1
        -> Bonsai.Vision.Crop(RegionOfInterest(X=582, Y=528, Width=30, Height=70)) => #1
        -> Bonsai.Vision.Threshold(ThresholdValue=75, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=375, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #5
        #1 -> Bonsai.Vision.Threshold(ThresholdValue=0, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #9
        #5, #9 -> Catch => #10
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #12
        #10 -> MemberSelector(Selector=Area) => #13
        #12, #1 -> Bonsai.Vision.Crop(RegionOfInterest(X=7, Y=10, Width=18, Height=51)) => #14
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #16
        #14 -> MemberSelector(Selector=Height) => #17
        #14 -> MemberSelector(Selector=Width) => #18
        #18, #17, #16, #13 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            item4 as area

            )
        -> WorkflowOutput
    #0 -> GroupWorkflow index3 => #3
        WorkflowInput Source1
        -> Bonsai.Vision.Crop(RegionOfInterest(X=613, Y=532, Width=30, Height=70)) => #1
        -> Bonsai.Vision.Threshold(ThresholdValue=75, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=375, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #5
        #1 -> Bonsai.Vision.Threshold(ThresholdValue=0, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #9
        #5, #9 -> Catch => #10
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #12
        #10 -> MemberSelector(Selector=Area) => #13
        #12, #1 -> Bonsai.Vision.Crop(RegionOfInterest(X=3, Y=8, Width=19, Height=51)) => #14
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #16
        #14 -> MemberSelector(Selector=Height) => #17
        #14 -> MemberSelector(Selector=Width) => #18
        #18, #17, #16, #13 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            item4 as area

            )
        -> WorkflowOutput
    #0 -> GroupWorkflow index4 => #4
        WorkflowInput Source1
        -> Bonsai.Vision.Crop(RegionOfInterest(X=515, Y=620, Width=30, Height=70)) => #1
        -> Bonsai.Vision.Threshold(ThresholdValue=75, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=375, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #5
        #1 -> Bonsai.Vision.Threshold(ThresholdValue=0, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #9
        #5, #9 -> Catch => #10
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #12
        #10 -> MemberSelector(Selector=Area) => #13
        #12, #1 -> Bonsai.Vision.Crop(RegionOfInterest(X=7, Y=7, Width=18, Height=50)) => #14
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #16
        #14 -> MemberSelector(Selector=Height) => #17
        #14 -> MemberSelector(Selector=Width) => #18
        #18, #17, #16, #13 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            item4 as area

            )
        -> WorkflowOutput
    #0 -> GroupWorkflow index5 => #5
        WorkflowInput Source1
        -> Bonsai.Vision.Crop(RegionOfInterest(X=573, Y=614, Width=30, Height=70)) => #1
        -> Bonsai.Vision.Threshold(ThresholdValue=75, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=375, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #5
        #1 -> Bonsai.Vision.Threshold(ThresholdValue=0, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #9
        #5, #9 -> Catch => #10
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #12
        #10 -> MemberSelector(Selector=Area) => #13
        #12, #1 -> Bonsai.Vision.Crop(RegionOfInterest(X=6, Y=7, Width=18, Height=51)) => #14
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #16
        #14 -> MemberSelector(Selector=Height) => #17
        #14 -> MemberSelector(Selector=Width) => #18
        #18, #17, #16, #13 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            item4 as area

            )
        -> WorkflowOutput
    #0 -> GroupWorkflow index6 => #6
        WorkflowInput Source1
        -> Bonsai.Vision.Crop(RegionOfInterest(X=629, Y=616, Width=30, Height=70)) => #1
        -> Bonsai.Vision.Threshold(ThresholdValue=75, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=375, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #5
        #1 -> Bonsai.Vision.Threshold(ThresholdValue=0, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #9
        #5, #9 -> Catch => #10
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #12
        #10 -> MemberSelector(Selector=Area) => #13
        #12, #1 -> Bonsai.Vision.Crop(RegionOfInterest(X=5, Y=8, Width=17, Height=51)) => #14
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #16
        #14 -> MemberSelector(Selector=Height) => #17
        #14 -> MemberSelector(Selector=Width) => #18
        #18, #17, #16, #13 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            item4 as area

            )
        -> WorkflowOutput
    #1, #2, #3, #4, #5, #6 -> Zip
    -> WorkflowOutput
-> Bonsai.IO.CsvWriter(FileName=bottom_right-5_2023-01-27_run-.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)

Disable Zip
-> Disable Bonsai.Scripting.Expressions.ExpressionTransform
  Expression:
    new(
    Item1 as TopLeft,
    Item2 as TopRight,
    Item3 as BottomLeft,
    item4 as BottomRight

    )
-> Disable Bonsai.IO.CsvWriter(FileName=output-5_2023-01-27_run-.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)
